global:
    startup_modules: []
    remote_modules_server:
        address: localhost
        port: 12345
        certfile: null
        keyfile: null
    namespace_server_port: 18861
    force_remote_calls_by_value: true
    stylesheet: qdark.qss
    daily_data_dirs: true
    hide_manager_window: false
    default_data_dir: null
    extension_paths: []

gui:
    frequencygenerator:
        module.Class: 'freqgen.freqgen_gui.FrequencyGeneratorGUI'
        connect:
            generatorlogic: 'frequencygeneratorlogic'

    finessemeasurement:
        module.Class: 'finesse_measurement.finessemeasurementgui.FinesseMeasurementGUI'
        connect:
            finesselogic: 'finesselogic'
            savelogic: 'savelogic'
  
logic:
    frequencygeneratorlogic:
        module.Class: 'frequencygenerator_logic.FrequencyGeneratorLogic'
        connect:
            generator: 'windfreak_dummy'

    finesselogic:
        module.Class: 'finesse_logic.FinesseLogic'
        connect:
            oscilloscope: 'rohdeschwarz_dummy'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'
        
    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        options:
            win_data_directory: 'D:\\Data'
            unix_data_directory: 'Data/'
            log_into_daily_directory: true
            save_pdf: true
            save_png: false

hardware:
    windfreak_dummy:
        module.Class: 'frequency_generator.WindFreak_dummy.WindFreak'
        options:
            serial_device: 'COM3'
        
    rohdeschwarz_dummy:
        module.Class: 'oscilloscope.rhode_schwarz_dummy.OscilloscopeRS'
        options:
            address: 'TCPIP::192.168.0.9::INSTR'
            visa_timeout: 1000
            opc_timeout: 3000
            measurement_timing: 400 
